PsychoPy2experiment version="2020.2.4post1"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main
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Routines
  Routine baseline
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Please look at the following pictures.
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    ImageComponent image_01
      image = exp_data/img/01.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 15
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    ImageComponent image_02
      image = exp_data/img/02.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 20
      stopVal [duration (s)] = 15
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    ImageComponent image_03
      image = exp_data/img/03.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 35
      stopVal [duration (s)] = 15
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    ImageComponent image_04
      image = exp_data/img/04.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 50
      stopVal [duration (s)] = 15
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    ImageComponent image_05
      image = exp_data/img/05.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 65
      stopVal [duration (s)] = 15
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  Routine stimulus
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie = ./exp_data/Dragon.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 203
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  Routine welcome
    TextComponent Welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In the next minutes you will be prompted with two tasks: First you'll watch some pictures and later a shrot video, please follow the instructions on screen.

        When you are ready, press the spacebar...
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine breath
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine thanks
    TextComponent thanks_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        The experiment is over.
        Thank you for your participation!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation
    PolygonComponent fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Scale
    TextComponent scale_text
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text = Lastly, we present you two scales: arousal (excitement) and valence. Please rate how the video made you feel. When you are done, press the spacebar.
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    ImageComponent scale_a
      image = exp_data/img/SAM-A-9.png
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider_a
      forceEndRoutine = False
      granularity = 0
      pos = (0, -.15)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = ('triangleMarker',)
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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    ImageComponent scale_v
      image = exp_data/img/SAM-V-9.png
      pos = (0, -.3)
      size = (1.2, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider_v
      forceEndRoutine = False
      granularity = 0
      pos = (0, -0.45)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = ('triangleMarker',)
      ticks = (-4, -3, -2, -1, 0, 1, 2, 3, 4)
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    KeyboardComponent key_resp_scales
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine welcome
  Routine baseline
  Routine fixation
  Routine stimulus
  Routine Scale
  Routine thanks
